// Salto
// (c) Charles CH Cohen, 2014-present
// this software is released to the public under a Creative Commons Attribution-NonCommercial-NoDerivatives 4.0 
// International license (CC BY-NC-ND 4.0, in English).
// for any questions, please email c.cohen@gmx.com



// -------------------------------Variables----------------------------------------
objref cellular, somatic, basal, apical, axonal
objref aptrunk, praxonal, collateral, AIS
objref internodal, nodal, axbleb
objref apic0, axon0, aislist, praxlist, intlist, nodlist, axbleblist

strdef axblebstr

axbleb_exists = 0
// --------------------------------------------------------------------------------



// -----------------------Larger-purpose sectionlists------------------------------
proc bigsecl() {local countBas, countApic, countAxon

	cellular = new SectionList()
	somatic = new SectionList()
	basal = new SectionList()
	apical = new SectionList()
	axonal = new SectionList()

	countBas = 0
	countApic = 0
	countAxon = 0

	forall {

		ifsec "dend" {

			countBas += 1
		}
		
		ifsec "apic" {

			countApic += 1
		}
		
		ifsec "axon" {

			countAxon += 1
		}
	}


	// assign somatic sections
	soma {

		cellular.append()
		somatic.append()
	}

	// assign basal dendritic sections
	for section = 0, countBas-1 dend[section] {

		cellular.append()
		basal.append()
	}

	// assign apical sections
	for section = 0, countApic-1 apic[section] {

		cellular.append()
		apical.append()
	}

	// assign axonal sections
	for section = 0, countAxon-1 axon[section] {

		cellular.append()
		axonal.append()	
	}
}
// --------------------------------------------------------------------------------



// -----------------------Smaller-purpose sectionlists-----------------------------
proc lilsecl() {local section, start_section, end_section, praxcount localobj templist, tempseclist

	// aptrunk sectionlist to exclude from sps application
	apic[0] apic0 = new SectionRef()
	// the aptrunk sectionlist
	aptrunk = new SectionList()
	// findtrunk exit code/cannot be local
	ftec = 1
	// number of times required to rerecall findtrunk beyond its in-built recursion
	// due to nstack overflow/cannot be local
	ftcount = 0
	
	while (ftec) {

		if (!ftcount) {
			
			findtrunk(apic0, aptrunk)
		
		} else {

			findtrunk(tsecref, aptrunk)
		}
	}

	// applicable sub-sectionlists of axonal to all axon types
	praxonal = new SectionList()
	collateral = new SectionList()

	// getaisloc
	getstrlist(ses, "aisloc.dat", aislist)
	list2seclist(aislist, AIS)

	// secref for axon, the very first axonal section
	forsec aislist.o(0).label {

		axon0 = new SectionRef()
	}
	
	// findtrunk exit code
	ftec = 1
	// number of times required to rerecall findtrunk beyond its in-built recursion
	// due to nstack overflow
	ftcount = 0
	
	while (ftec) {

		if (!ftcount) {
			
			findtrunk(axon0, praxonal)
		
		} else {

			findtrunk(tsecref, praxonal)
		}
	}

	// define collateral as axonal without praxonal
	forsec axonal {

		collateral.append()
	}

	forsec praxonal {

		collateral.remove()
	}

	// store praxonal as strseclist
	praxlist = new List()
	seclist2list(praxonal, praxlist)

	// find nodes and internodes, and add these to nodal and internodal sectionlists
	if (axontype > 1) {

		if (axbleb_exists) {

			getstrlist(ses, "axblebloc.dat", axbleblist)
			axbleb = new SectionList()		
			list2seclist(axbleblist, axbleb)

			end_section = praxlist.count-axbleblist.count-1
		
		} else {

			end_section = praxlist.count-1	
		}
		
		internodal = new SectionList()
		nodal = new SectionList()

		// minimum internode length
		mint = getvar(ses, "mint.dat")

		// start checking sections past the AIS
		start_section = 0

		forsec AIS {

			start_section += 1
		}

		for section = start_section, section = end_section {

			forsec praxlist.o(section).label {

				if (L >= mint) {

					internodal.append()
				
				} else {

					nodal.append()
				}
			}
		}
	}
	
	// check total subsection numbers
	praxcount = 0
	
	forsec AIS {

		praxcount += 1
	}
	
	forsec internodal {

		praxcount += 1
	}
	
	forsec nodal {

		praxcount += 1
	}
	
	if (axbleb_exists) {

		praxcount += 1
	}

	if (praxcount != praxlist.count) {

		print "Error: primary axon sub-sectionlists incomplete"
	}
}
// --------------------------------------------------------------------------------



// --------------------------------------------------------------------------------
func setparal() {

	if (!celltypevec.x[0] || celltypevec.x[0] == 1) {

		// measured by EM (Cohen et al. 2020)
		paral = 2.3
	
	} else if (celltypevec.x[0] == 2) {

		// measured by paranodin/Caspr aggregates (Coman et al. 2006)
		paral = 2.7
	
	} else {

		paral = 0
	}

	return paral
}
// --------------------------------------------------------------------------------



// --------------------------------------------------------------------------------
func setjuxtal() {

	if (!celltypevec.x[0] || celltypevec.x[0] == 1) {

		// measured by Kv1.1 immunostaining (Nie et al. 2003)
		juxtal = 8
	
	} else if (celltypevec.x[0] == 2) {

		// measured by Kv1.2 aggregates (Coman et al. 2006)
		juxtal = 4.6
	
	} else {

		juxtal = 0
	} 

	return juxtal	
}
// --------------------------------------------------------------------------------



// --------------------------------------------------------------------------------
func crintlist() {local intcount, nodcount, k, m, q, paral localobj tempseclist, templist

	if (numarg() == 1 && argtype(1) == 2) {

		if (!strcmp($s1, "help")) {

			print "Create list of internode sections and return number of internodes."
			stop
		}
	}

	intcount = 0

	if (axontype > 1) {		
		
		forsec internodal {

			intcount += 1
		}

		intlist = crveclist(intlist, intcount)

		nodcount = 0

		forsec nodal {

			nodcount += 1
		}

		nodlist = crveclist(nodlist, nodcount)
		
		tempseclist = new SectionList()

		forsec praxonal {

			tempseclist.append()
		}
		
		forsec AIS {

			tempseclist.remove()
		}

		if (axbleb_exists) {

			forsec axbleb {

				tempseclist.remove()
			}
		}

		templist = new List()
		seclist2list(tempseclist, templist)
		
		k = 0		
		m = -1
		r = -1
			
		while (k < templist.count) {

			forsec templist.o(k).label {

				ifsec internodal {

					m += 1
					q = k

					while (q < templist.count) {

						forsec templist.o(k).label {

							ifsec internodal {
							
								intlist.o(m).resize(intlist.o(m).size+1)
								intlist.o(m).x[intlist.o(m).size-1] = sec2secnum(templist.o(q).label)

								q += 1
								k += 1
							}

							ifsec nodal {

								q = templist.count
							}
						}
					}
				}

				ifsec nodal {
					
					r += 1
					q = k

					while (q < templist.count) {

						forsec templist.o(k).label {

							ifsec nodal {
							
								nodlist.o(r).resize(nodlist.o(r).size+1)
								nodlist.o(r).x[nodlist.o(r).size-1] = sec2secnum(templist.o(q).label)

								q += 1
								k += 1
							}

							ifsec internodal {

								q = templist.count
							}
						}
					}
				}	
			}
		}

		k = intlist.count-1

		while (k > m && k < intlist.count) {

			intlist.remove(k)
			k -= 1
		}

		k = nodlist.count-1

		while (k > r && k < nodlist.count) {

			nodlist.remove(k)
			k -= 1
		}

		sprint(tempstr, "%g", axontype)

		for k = 0, intlist.count-1 {

			intlist.o(k).label(tempstr)
		}

		if (DCPARA) {

			paral = setparal()

			for k = 0, intlist.count-1 {

				if ((axon[intlist.o(k).x[0]].L/(2*axon[intlist.o(k).x[0]].nseg)) > 0.5*paral) {

					sprint(tempstr, "%g", 3)
					intlist.o(k).label(tempstr)
				}
			}
		}

		if (nodlist.count) {

			for k = 0, nodlist.count-1 {

				sprint(tempstr, "%g", 0)
				nodlist.o(k).label(tempstr)
			}
		}

		tempstr = ""

		return intlist.count
	
	} else {

		return intcount
	}
}
// -----------------------------------------------------------------------------------



// -----------------------------------------------------------------------------------
obfunc getlongint() {local k, q, rowcounter localobj tempvec, tempmat

	tempvec = new Vector()

	if (crintlist()) {

		tempmat = new Matrix(1, 6)
		rowcounter = 1

		for k = 0, intlist.count-1 {

			for q = 0, intlist.o(k).size-1 {

				tempmat.resize(rowcounter, 6)

				tempmat.x[rowcounter-1][0] = k
				tempmat.x[rowcounter-1][1] = intlist.o(k).x[q]
				tempmat.x[rowcounter-1][2] = axon[intlist.o(k).x[q]].L
				tempmat.x[rowcounter-1][3] = axon[intlist.o(k).x[q]].nseg

				rowcounter += 1
			}
		}

		tempmat.setcol(4, tempmat.getcol(2).sort())
		tempmat.setcol(5, tempmat.getcol(2).sortindex())

		return tempmat.getrow(tempmat.x[tempmat.nrow-1][5]).resize(4)
	
	} else {

		return tempvec
	}
}
// -----------------------------------------------------------------------------------



// -----------------------------------------------------------------------------------
obfunc getshortint() {local k, q, rowcounter localobj tempvec, tempmat

	tempvec = new Vector()

	if (crintlist()) {

		tempmat = new Matrix(1, 6)
		rowcounter = 1

		for k = 0, intlist.count-1 {

			for q = 0, intlist.o(k).size-1 {

				tempmat.resize(rowcounter, 6)

				tempmat.x[rowcounter-1][0] = k
				tempmat.x[rowcounter-1][1] = intlist.o(k).x[q]
				tempmat.x[rowcounter-1][2] = axon[intlist.o(k).x[q]].L
				tempmat.x[rowcounter-1][3] = axon[intlist.o(k).x[q]].nseg

				rowcounter += 1
			}
		}

		tempmat.setcol(4, tempmat.getcol(2).sort())
		tempmat.setcol(5, tempmat.getcol(2).sortindex())

		return tempmat.getrow(tempmat.x[0][5]).resize(4)
	
	} else {

		return tempvec
	}
}
// -----------------------------------------------------------------------------------
